<?xml version='1.0' encoding='UTF-8'?>
<!--
 This CellML file was generated by M. Ryzhii, University of Aizu
 07/12/2021

 openCOR  https://opencor.ws/
 CellML 1.0 was used to generate this cellular model
 http://www.CellML.org/

 Modified (based on sigmoid function) Corrado & Niederer tho-variable cardiac excitable cell model. 
 Corrado C, Niederer SA. A two-variable model robust to pacemaker behaviour for the dynamics of the cardiac action potential. 
 Math Biosci. 2016; 281: 46&#45;&#45;54. 
 https://doi.org/10.1016/j.mbs.2016.08.010-->
<model name="corrado_2016" xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#">
    <units name="ms">
        <unit prefix="milli" units="second"/>
    </units>
    <units name="per_ms">
        <unit exponent="-1" prefix="milli" units="second"/>
    </units>
    <component name="environment">
        <variable name="time" public_interface="out" units="ms"/>
    </component>
    <component name="J_stim">
        <variable name="J_stim" public_interface="out" units="per_ms"/>
        <variable initial_value="100" name="IstimStart" units="ms"/>
        <variable initial_value="50000" name="IstimEnd" units="ms"/>
        <variable initial_value="0.4" name="IstimAmplitude" units="per_ms"/>
        <variable initial_value="500" name="IstimPeriod" units="ms"/>
        <variable initial_value="1" name="IstimPulseDuration" units="ms"/>
        <variable name="time" public_interface="in" units="ms"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>J_stim</ci>
                <piecewise>
                    <piece>
                        <ci>IstimAmplitude</ci>
                        <apply>
                            <and/>
                            <apply>
                                <geq/>
                                <ci>time</ci>
                                <ci>IstimStart</ci>
                            </apply>
                            <apply>
                                <leq/>
                                <ci>time</ci>
                                <ci>IstimEnd</ci>
                            </apply>
                            <apply>
                                <leq/>
                                <apply>
                                    <minus/>
                                    <apply>
                                        <minus/>
                                        <ci>time</ci>
                                        <ci>IstimStart</ci>
                                    </apply>
                                    <apply>
                                        <times/>
                                        <apply>
                                            <floor/>
                                            <apply>
                                                <divide/>
                                                <apply>
                                                    <minus/>
                                                    <ci>time</ci>
                                                    <ci>IstimStart</ci>
                                                </apply>
                                                <ci>IstimPeriod</ci>
                                            </apply>
                                        </apply>
                                        <ci>IstimPeriod</ci>
                                    </apply>
                                </apply>
                                <ci>IstimPulseDuration</ci>
                            </apply>
                        </apply>
                    </piece>
                    <otherwise>
                        <cn cellml:units="per_ms">0</cn>
                    </otherwise>
                </piecewise>
            </apply>
        </math>
    </component>
    <component name="membrane">
        <variable initial_value="0.01" name="Vm" public_interface="out" units="dimensionless"/>
        <variable name="time" public_interface="in" units="ms"/>
        <variable name="J_in" public_interface="in" units="per_ms"/>
        <variable name="J_out" public_interface="in" units="per_ms"/>
        <variable name="J_stim" public_interface="in" units="per_ms"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>Vm</ci>
                </apply>
                <apply>
                    <plus/>
                    <ci>J_in</ci>
                    <ci>J_out</ci>
                    <ci>J_stim</ci>
                </apply>
            </apply>
        </math>
    </component>
    <component name="J_in">
        <variable name="J_in" public_interface="out" units="per_ms"/>
        <variable initial_value="0.3" name="tau_in" units="ms"/>
        <variable name="time" private_interface="out" public_interface="in" units="ms"/>
        <variable initial_value="0.13" name="V_gate" units="dimensionless"/>
        <variable name="Vm" private_interface="out" public_interface="in" units="dimensionless"/>
        <variable name="h" private_interface="in" units="dimensionless"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>J_in</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>h</ci>
                        <ci>Vm</ci>
                        <apply>
                            <minus/>
                            <ci>Vm</ci>
                            <ci>V_gate</ci>
                        </apply>
                        <apply>
                            <minus/>
                            <cn cellml:units="dimensionless">1</cn>
                            <ci>Vm</ci>
                        </apply>
                    </apply>
                    <ci>tau_in</ci>
                </apply>
            </apply>
        </math>
    </component>
    <component name="J_in_h_gate">
        <variable initial_value="0.5" name="h" public_interface="out" units="dimensionless"/>
        <variable initial_value="120" name="tau_open" units="ms"/>
        <variable initial_value="150" name="tau_close" units="ms"/>
        <variable initial_value="0.13" name="V_gate" units="dimensionless"/>
        <variable name="Vm" public_interface="in" units="dimensionless"/>
        <variable name="tau" units="ms"/>
        <variable name="h_inf" units="dimensionless"/>
        <variable name="time" public_interface="in" units="ms"/>
        <variable initial_value="0.001" name="V_s" units="dimensionless"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>tau</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>tau_open</ci>
                        <ci>tau_close</ci>
                    </apply>
                    <apply>
                        <minus/>
                        <ci>tau_open</ci>
                        <apply>
                            <times/>
                            <ci>h_inf</ci>
                            <apply>
                                <minus/>
                                <ci>tau_close</ci>
                                <ci>tau_open</ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>h_inf</ci>
                <apply>
                    <times/>
                    <cn cellml:units="dimensionless">0.5</cn>
                    <apply>
                        <minus/>
                        <cn cellml:units="dimensionless">1</cn>
                        <apply>
                            <tanh/>
                            <apply>
                                <divide/>
                                <apply>
                                    <minus/>
                                    <ci>Vm</ci>
                                    <ci>V_gate</ci>
                                </apply>
                                <ci>V_s</ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>h</ci>
                </apply>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <ci>h_inf</ci>
                        <ci>h</ci>
                    </apply>
                    <ci>tau</ci>
                </apply>
            </apply>
        </math>
    </component>
    <component name="J_out">
        <variable name="J_out" public_interface="out" units="per_ms"/>
        <variable initial_value="6" name="tau_out" units="ms"/>
        <variable name="Vm" private_interface="out" public_interface="in" units="dimensionless"/>
        <variable name="h" private_interface="in" units="dimensionless"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>J_out</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <apply>
                            <minus/>
                            <apply>
                                <minus/>
                                <cn cellml:units="dimensionless">1</cn>
                                <ci>h</ci>
                            </apply>
                        </apply>
                        <ci>Vm</ci>
                    </apply>
                    <ci>tau_out</ci>
                </apply>
            </apply>
        </math>
    </component>
    <group>
        <relationship_ref relationship="encapsulation"/>
        <component_ref component="J_in">
            <component_ref component="J_in_h_gate"/>
        </component_ref>
    </group>
    <connection>
        <map_components component_1="membrane" component_2="environment"/>
        <map_variables variable_1="time" variable_2="time"/>
    </connection>
    <connection>
        <map_components component_1="J_stim" component_2="environment"/>
        <map_variables variable_1="time" variable_2="time"/>
    </connection>
    <connection>
        <map_components component_1="J_in" component_2="environment"/>
        <map_variables variable_1="time" variable_2="time"/>
    </connection>
    <connection>
        <map_components component_1="membrane" component_2="J_stim"/>
        <map_variables variable_1="J_stim" variable_2="J_stim"/>
    </connection>
    <connection>
        <map_components component_1="membrane" component_2="J_in"/>
        <map_variables variable_1="Vm" variable_2="Vm"/>
        <map_variables variable_1="J_in" variable_2="J_in"/>
    </connection>
    <connection>
        <map_components component_1="membrane" component_2="J_out"/>
        <map_variables variable_1="Vm" variable_2="Vm"/>
        <map_variables variable_1="J_out" variable_2="J_out"/>
    </connection>
    <connection>
        <map_components component_1="J_in" component_2="J_in_h_gate"/>
        <map_variables variable_1="Vm" variable_2="Vm"/>
        <map_variables variable_1="h" variable_2="h"/>
        <map_variables variable_1="time" variable_2="time"/>
    </connection>
    <connection>
        <map_components component_1="J_in" component_2="J_out"/>
        <map_variables variable_1="h" variable_2="h"/>
    </connection>

</model>
