<?xml version='1.0' encoding='UTF-8'?>
<!--
 This CellML file was generated by M. Ryzhii, University of Aizu
 07/12/2021

 openCOR  https://opencor.ws/
 CellML 1.0 was used to generate this cellular model
 http://www.CellML.org/

Pacemaking variant of the Corrado & Niederer two-variable cell model. 
M. Ryzhii, University of Aizu, Japan
E. Ryzhii, Fukushima Medical University, Japan
(2022) "Pacemaking function of two simplified cell models"
PLoS ONE 17(4): e0257935. doi.org/10.1371/journal.pone.0257935 
-->
<!--  Set stim_start to a value less than stim_end to observe 
  the effect of external current-->
<model name="corrado_oscillator_2021" xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#">
    <units name="ms">
        <unit prefix="milli" units="second"/>
    </units>
    <units name="per_ms">
        <unit exponent="-1" prefix="milli" units="second"/>
    </units>
    <component name="environment">
        <variable name="time" public_interface="out" units="ms"/>
    </component>
    <component name="J_stim">
        <variable name="J_stim" public_interface="out" units="per_ms"/>
        <variable initial_value="3000" name="Istim_start" units="ms"/>
        <variable initial_value="5000" name="Istim_end" units="ms"/>
        <variable initial_value="0.001" name="IstimAmplitude" units="per_ms"/>
        <variable name="time" public_interface="in" units="ms"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>J_stim</ci>
                <piecewise>
                    <piece>
                        <ci>IstimAmplitude</ci>
                        <apply>
                            <and/>
                            <apply>
                                <lt/>
                                <ci>Istim_start</ci>
                                <ci>Istim_end</ci>
                            </apply>
                            <apply>
                                <geq/>
                                <ci>time</ci>
                                <ci>Istim_start</ci>
                            </apply>
                            <apply>
                                <leq/>
                                <ci>time</ci>
                                <ci>Istim_end</ci>
                            </apply>
                        </apply>
                    </piece>
                    <otherwise>
                        <cn cellml:units="per_ms">0</cn>
                    </otherwise>
                </piecewise>
            </apply>
        </math>
    </component>
    <component name="membrane">
        <variable initial_value="0.01" name="u" public_interface="out" units="dimensionless"/>
        <variable name="time" public_interface="in" units="ms"/>
        <variable name="J_in" public_interface="in" units="per_ms"/>
        <variable name="J_out" public_interface="in" units="per_ms"/>
        <variable name="J_stim" public_interface="in" units="per_ms"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>u</ci>
                </apply>
                <apply>
                    <plus/>
                    <ci>J_in</ci>
                    <ci>J_out</ci>
                    <ci>J_stim</ci>
                </apply>
            </apply>
        </math>
    </component>
    <component name="J_in">
        <variable name="J_in" public_interface="out" units="per_ms"/>
        <variable initial_value="0.3" name="tau_in" units="ms"/>
        <variable name="time" private_interface="out" public_interface="in" units="ms"/>
        <variable initial_value="-0.05" name="u_gate" public_interface="out" units="dimensionless"/>
        <variable name="u" private_interface="out" public_interface="in" units="dimensionless"/>
        <variable initial_value="0.5" name="h" public_interface="out" units="dimensionless"/>
        <variable initial_value="0.20" name="b" units="dimensionless"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>J_in</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>h</ci>
                        <ci>u</ci>
                        <apply>
                            <plus/>
                            <ci>u</ci>
                            <ci>b</ci>
                        </apply>
                        <apply>
                            <minus/>
                            <cn cellml:units="dimensionless">1</cn>
                            <ci>u</ci>
                        </apply>
                    </apply>
                    <ci>tau_in</ci>
                </apply>
            </apply>
        </math>
    </component>
    <component name="J_in_h_gate">
        <variable name="h" public_interface="in" units="dimensionless"/>
        <variable initial_value="120" name="tau_open" units="ms"/>
        <variable initial_value="150" name="tau_close" units="ms"/>
        <variable name="u_gate" public_interface="in" units="dimensionless"/>
        <variable name="u" public_interface="in" units="dimensionless"/>
        <variable name="tau" units="ms"/>
        <variable name="h_inf" units="dimensionless"/>
        <variable name="time" public_interface="in" units="ms"/>
        <variable initial_value="0.15" name="u_s" units="dimensionless"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>tau</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>tau_open</ci>
                        <ci>tau_close</ci>
                    </apply>
                    <apply>
                        <minus/>
                        <ci>tau_open</ci>
                        <apply>
                            <times/>
                            <ci>h_inf</ci>
                            <apply>
                                <minus/>
                                <ci>tau_close</ci>
                                <ci>tau_open</ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>h_inf</ci>
                <apply>
                    <times/>
                    <cn cellml:units="dimensionless">0.5</cn>
                    <apply>
                        <minus/>
                        <cn cellml:units="dimensionless">1</cn>
                        <apply>
                            <tanh/>
                            <apply>
                                <divide/>
                                <apply>
                                    <minus/>
                                    <ci>u</ci>
                                    <ci>u_gate</ci>
                                </apply>
                                <ci>u_s</ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>h</ci>
                </apply>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <ci>h_inf</ci>
                        <ci>h</ci>
                    </apply>
                    <ci>tau</ci>
                </apply>
            </apply>
        </math>
    </component>
    <component name="J_out">
        <variable name="J_out" public_interface="out" units="per_ms"/>
        <variable initial_value="6" name="tau_out" units="ms"/>
        <variable name="u" private_interface="out" public_interface="in" units="dimensionless"/>
        <variable name="h" private_interface="in" units="dimensionless"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>J_out</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <apply>
                            <minus/>
                            <apply>
                                <minus/>
                                <cn cellml:units="dimensionless">1</cn>
                                <ci>h</ci>
                            </apply>
                        </apply>
                        <ci>u</ci>
                    </apply>
                    <ci>tau_out</ci>
                </apply>
            </apply>
        </math>
    </component>
    <group>
        <relationship_ref relationship="encapsulation"/>
        <component_ref component="J_in">
            <component_ref component="J_in_h_gate"/>
        </component_ref>
    </group>
    <connection>
        <map_components component_1="membrane" component_2="environment"/>
        <map_variables variable_1="time" variable_2="time"/>
    </connection>
    <connection>
        <map_components component_1="J_stim" component_2="environment"/>
        <map_variables variable_1="time" variable_2="time"/>
    </connection>
    <connection>
        <map_components component_1="J_in" component_2="environment"/>
        <map_variables variable_1="time" variable_2="time"/>
    </connection>
    <connection>
        <map_components component_1="membrane" component_2="J_stim"/>
        <map_variables variable_1="J_stim" variable_2="J_stim"/>
    </connection>
    <connection>
        <map_components component_1="membrane" component_2="J_in"/>
        <map_variables variable_1="u" variable_2="u"/>
        <map_variables variable_1="J_in" variable_2="J_in"/>
    </connection>
    <connection>
        <map_components component_1="membrane" component_2="J_out"/>
        <map_variables variable_1="u" variable_2="u"/>
        <map_variables variable_1="J_out" variable_2="J_out"/>
    </connection>
    <connection>
        <map_components component_1="J_in" component_2="J_in_h_gate"/>
        <map_variables variable_1="u" variable_2="u"/>
        <map_variables variable_1="h" variable_2="h"/>
        <map_variables variable_1="time" variable_2="time"/>
        <map_variables variable_1="u_gate" variable_2="u_gate"/>
    </connection>
    <connection>
        <map_components component_1="J_in" component_2="J_out"/>
        <map_variables variable_1="h" variable_2="h"/>
    </connection>
</model>
